PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine intro
    KeyboardComponent resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome! This is a decision making experiment.

        Whatever decison you make, you'll have to back up with certainty.

        The level of certainty you have for your decision is based on your performance of a task. Your decision is considered certain if you perform well and score at least 10 points

        Indicate your decision to the following statement by pressing either 'y' for yes or 'n' for no.

        Atticus should get this research assisstant job!
    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if resp.keys == 'y':
            dec_yes = 1
            dec_no = 0
        elif resp.keys == 'n':
            dec_yes = 0
            dec_no = 1
  Routine trial_no
    TextComponent no_text
      color [set every repeat] = $no_color
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = .7
      text [set every repeat] = $no_word
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    KeyboardComponent no_resp
      allowedKeys = 'r','g','b'
      correctAns = $no_corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = .7
      storeCorrect = True
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    CodeComponent no_adder
      Code Type = Auto->JS
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      Begin Experiment:
        no_trial_score = 0
      End Routine:
        if no_resp.corr:
            no_trial_score += 1
  Routine trial_yes
    TextComponent yes_stim
      color [set every repeat] = $yes_color
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2
      text [set every repeat] = $yes_word
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    KeyboardComponent yes_resp
      allowedKeys = 'r','g','b'
      correctAns = $yes_corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine feedback
    TextComponent comp_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $no_trial_score
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  Routine yes_ready
    KeyboardComponent key_resp
      allowedKeys = 'r','g','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent yes_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        only respond to the color, not the word!

        press 'r' for red
        press 'g' for green
        press 'b' for blue

        try and make it to 10!

        Press 'r', 'g', or 'b' to continue
  Routine no_ready
    KeyboardComponent key_resp_2
      allowedKeys = 'r','g','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent no_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        only respond to the word, not the color!

        press 'r' for red
        press 'g' for green
        press 'b' for blue

        try and make it to 10!

        Press 'r', 'g', or 'b' to continue
  Routine yes_ready_2
  Routine no_ready_2
Flow
  Routine intro
  LoopInitiator skip loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = dec_yes
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    Routine yes_ready
    LoopInitiator trials_yes_loop loopType="TrialHandler"
      conditionsFile = yes - Sheet1.csv
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('yes_word', 'red'), ('yes_color', 'red'), ('yes_cong', 1), ('yes_corr_resp', 'r')]),
        OrderedDict([('yes_word', 'green'), ('yes_color', 'green'), ('yes_cong', 1), ('yes_corr_resp', 'g')]),
        OrderedDict([('yes_word', 'blue'), ('yes_color', 'blue'), ('yes_cong', 1), ('yes_corr_resp', 'b')])]
      Routine trial_yes
    LoopTerminator trials_yes_loop
  LoopTerminator skip
  LoopInitiator skip_second loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = dec_no
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    Routine no_ready
    LoopInitiator trials_no_loop loopType="TrialHandler"
      conditionsFile = no - Sheet1.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('no_word', 'red'), ('no_color', 'green'), ('no_corr_resp', 'g')]),
        OrderedDict([('no_word', 'green'), ('no_color', 'blue'), ('no_corr_resp', 'b')]),
        OrderedDict([('no_word', 'blue'), ('no_color', 'red'), ('no_corr_resp', 'r')]),
        OrderedDict([('no_word', 'red'), ('no_color', 'blue'), ('no_corr_resp', 'b')]),
        OrderedDict([('no_word', 'green'), ('no_color', 'red'), ('no_corr_resp', 'r')]),
        OrderedDict([('no_word', 'blue'), ('no_color', 'green'), ('no_corr_resp', 'g')]),
        OrderedDict([('no_word', 'red'), ('no_color', 'green'), ('no_corr_resp', 'g')]),
        OrderedDict([('no_word', 'green'), ('no_color', 'blue'), ('no_corr_resp', 'b')]),
        OrderedDict([('no_word', 'blue'), ('no_color', 'red'), ('no_corr_resp', 'r')]),
        OrderedDict([('no_word', 'red'), ('no_color', 'blue'), ('no_corr_resp', 'b')]),
        OrderedDict([('no_word', 'green'), ('no_color', 'red'), ('no_corr_resp', 'r')]),
        OrderedDict([('no_word', 'blue'), ('no_color', 'green'), ('no_corr_resp', 'g')]),
        OrderedDict([('no_word', 'red'), ('no_color', 'green'), ('no_corr_resp', 'g')]),
        OrderedDict([('no_word', 'green'), ('no_color', 'blue'), ('no_corr_resp', 'b')]),
        OrderedDict([('no_word', 'blue'), ('no_color', 'red'), ('no_corr_resp', 'r')])]
      Routine trial_no
    LoopTerminator trials_no_loop
  LoopTerminator skip_second
  Routine feedback
